// Basic template to be load by 'scipionbox_preprocess_basic.py' script
// Replace any value to ~label|defaultValue|typeValue~
// where typeValue: 0->String ; 1->Path ; 2->Boolean ; 3->Integer ; 4->Float
// enviroment variables can be used, see filesPath at line 16
[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Movie's folder|%(SCIPION_TESTS)s/relion13_tutorial/betagal/Micrographs|2~",
        "filesPattern": "*.mrcs",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 3.54,
        "scannedPixelSize": 7.0,
        "doseInitial": "~Initial dose|0.0|4~",
        "dosePerFrame": "~Dose per frame|0.0|4~",
        "gainFile": "~Gain's path|%(SCIPION_TESTS)s/relion13_tutorial/betagal/Micrographs/gain.mrc|2~",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "80",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": 250,
        "useExistingGainImage": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "112",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": "~First frame to align|1|4~",
        "alignFrameN": "~Last frame to align|0|4~",
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": false,
        "patchX": 9,
        "patchY": 9,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "229",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "astigmatism": 100.0,
        "windowSize": 512,
        "plotResRing": true,
        "gpuList": "0",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "112.outputMicrographs"
    },
    {
        "object.className": "XmippProtParticleBoxsize",
        "object.id": "297",
        "object.label": "xmipp3 - particle boxsize",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micrographs": "112.outputMicrographs"
    },
    {
        "object.className": "SphireProtCRYOLO",
        "object.id": "335",
        "object.label": "sphire - crYOLO picking",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "trainDataset": false,
        "memory": 2.0,
        "input_size": 1024,
        "bxSzFromCoor": true,
        "boxSize": 100,
        "batch_size": 3,
        "learning_rates": 0.0001,
        "max_box_per_image": 600,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "112.outputMicrographs",
        "coordsToBxSz": "297.outputBoxsize"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "498",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": -1,
        "doBorders": true,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "229.outputCTF",
        "inputCoordinates": "335.outputCoordinates"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "562",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "continueIter": "last",
        "numberOfClasses": 16,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfIterations": 25,
        "regularisationParamT": 2,
        "doSubsets": false,
        "subsetSize": 10000,
        "subsetUpdates": 3,
        "maskZero": 0,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "0",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "inputParticles": "498.outputParticles"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "639",
        "object.label": "scipion - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "335",
            "229",
            "112",
            "80"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": true,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "dmlauenda@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "publishCmd": ""
    }
]